graphs:

  - id: EEG
    nodes:
    - id: acquire
      module: timeflux_octaeeg.nodes.driver
      class: OctaEEG
      params:
        rate: 1000
        gain: 1
        names: [PO7, O1, Oz, O2, PO8, PO3, POz, PO4]
        debug: false # Set to `true` if you want to record the internal timestamp and sample counter
    - id: publish
      module: timeflux.nodes.zmq
      class: Pub
      params:
        topic: eeg
    edges:
    - source: acquire
      target: publish
    rate: 10

  - id: Monitoring
    nodes:
    - id: subscribe
      module: timeflux.nodes.zmq
      class: Sub
      params:
        topics: [ eeg ]
    - id: notch
      module: timeflux_dsp.nodes.filters
      class: IIRFilter
      params:
        filter_type: bandstop
        order: 3
        frequencies: [48, 52]
    - id: bandpass
      module: timeflux_dsp.nodes.filters
      class: IIRFilter
      params:
        order: 3
        frequencies: [1, 25]
    - id: ui
      module: timeflux_ui.nodes.ui
      class: UI
    - id: debug
      module: timeflux.nodes.debug
      class: Display
    edges:
      - source: subscribe:eeg
        target: notch
      - source: notch
        target: bandpass
      - source: bandpass
        target: ui:eeg
      - source: subscribe:eeg
        target: debug
    rate: 10

  - id: Recorder
    nodes:
    - id: subscribe
      module: timeflux.nodes.zmq
      class: Sub
      params:
        topics: [ eeg ]
    - id: save
      module: timeflux.nodes.hdf5
      class: Save
      params:
        path: . # The HDF5 file will be saved in the current directory
    edges:
      - source: subscribe:eeg
        target: save:eeg
    rate: 1

  - id: Broker
    nodes:
    - id: broker
      module: timeflux.nodes.zmq
      class: Broker
